PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent resp_Letter
      allowedKeys = 'n','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string
        letters = list(string.ascii_uppercase)
        thisLetter = np.random.choice(letters)
        n = 2 # first specify the n condition of the trial/block

        presentedLetters = [0]*n
      Begin Routine:
        thisLetter = np.random.choice(letters)



        letterSelected = False # a boolean to state a letter has not yet been selected
        if not target: # this is not a target trial
                while not letterSelected: # repeat the content of this loop until a letter is selected
                    thisLetter = np.random.choice(letters)# if this is not a target then randomly choose
                    if len(presentedLetters) < n or thisLetter != presentedLetters[-n]: # if n letters have not yet been presented, or this is not the same as the n-th trial back
                        letterSelected = True # accept this as the chosen letter
        else:
                thisLetter = presentedLetters[-n]# if this was a target choose the n'th back
        presentedLetters.append(thisLetter)
  Routine instr
    TextComponent guide
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        2-back
        ture : m
        false: n
    KeyboardComponent resp_guide
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = con_1back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thisLetter': 'L', 'answer': 0},
      {'thisLetter': 'J', 'answer': 0},
      {'thisLetter': 'A', 'answer': 0},
      {'thisLetter': 'K', 'answer': 0},
      {'thisLetter': 'A', 'answer': 1}]
    Routine trial
  LoopTerminator trials
